CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<channel>.*).tif
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "YFP")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "TL")
    Name to assign these images:Worms
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Use ConvexHull smoothing to separate the bright well from the dark well edges.']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
    Select the input image:Worms
    Name the output image:Background
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Divide the image by the illumination function.']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
    Select the input image:Worms
    Name the output image:IllumCorrWorms
    Select the illumination function:Background
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:7|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notes:['Invert the image to make the worms bright and the background dark.']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WormsInverted
    Image or measurement?:Image
    Select the first image:IllumCorrWorms
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify worm objects by thresholding.']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
    Select the input image:WormsInverted
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):200,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:9|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notes:['Edit worm objects: separate clusters and adjust outlines if part of the worm is missing. Tip: press T to see the entire worm objects, as the outlines are hard to see.']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
    Select the objects to be edited:WormObjects
    Name the edited objects:EditedWormObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Worms
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:10|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notes:['Slightly expand the worm objects so that inclusions on the edge of the worm objects are also included.']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
    Select the input objects:EditedWormObjects
    Name the output objects:ExpandedWormObjects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify the inclusions by thresholding.']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
    Select the input image:YFP
    Name the primary objects to be identified:Inclusions
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.080000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:12|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notes:['Relate the inclusions to the worm objects they reside in.']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
    Parent objects:ExpandedWormObjects
    Child objects:Inclusions
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InclusionsInWorms
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
OverlayOutlines:[module_num:13|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notes:['Visual inspection to see whether the inclusions inside the worm objects have been correctly recognised.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:YFP
    Name the output image:InclusionOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:InclusionsInWorms
    Select outline color:#21FFFF
    Select objects to display:ExpandedWormObjects

MeasureImageIntensity:[module_num:14|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notes:['Measure the total intensity within inclusions in the images. Note that CellProfiler normalises the intensities, and hence these cannot be compared between different images.']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
    Select images to measure:YFP
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:InclusionsInWorms
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:15|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notes:['Measure the fluorescence intensity of each worm object.']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
    Select images to measure:YFP
    Select objects to measure:ExpandedWormObjects

MeasureObjectSizeShape:[module_num:16|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notes:['Measure the area of the inclusions. The results are determined for each inclusion separately in this module, so the area per worm needs to be manually added up.']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
    Select object sets to measure:Inclusions
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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notes:['Export the data for further analysis in excel. Adjust the prefix to separate the datasets (e.g. day5).']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|OneDrive - Universiteit Utrecht/Imaging/Cellprofiler analysis/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Inclusions|AreaShape_Area,Inclusions|Parent_ExpandedWormObjects,Image|ExecutionTime_08IdentifyPrimaryObjects,Image|ExecutionTime_04Groups,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_06CorrectIlluminationApply,Image|ExecutionTime_12RelateObjects,Image|ExecutionTime_07ImageMath,Image|ExecutionTime_01Images,Image|ExecutionTime_10ExpandOrShrinkObjects,Image|ExecutionTime_09EditObjectsManually,Image|ExecutionTime_16MeasureObjectSizeShape,Image|ExecutionTime_13OverlayOutlines,Image|ExecutionTime_05CorrectIlluminationCalculate,Image|ExecutionTime_15MeasureObjectIntensity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:dayX
    Overwrite existing files without warning?:No
    Data to export:ExpandedWormObjects
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Inclusions
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:18|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notes:['Save the inclusion overlay (from OverlayOutlines #13) as an image for visual inspection after the analysis has finished.']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
    Select the type of image to save:Image
    Select the image to save:InclusionOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:YFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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